name: Run the Tekmatic incubator - Substrate App Workflow

metadata:
  author: Casey Stone
  info: Workflow for incubating on tekmatic incubator
  version: 0.1

flowdef:
  # transfer from bmg to exchange
  - name: Transfer plate without lid from bmg to exchange
    module: biopf400
    action: transfer
    args:
      source: bmg_reader_nest
      target: exchange_deck_low_narrow
      source_approach: safe_path_bmg
      target_approach: safe_path_exchange
      source_plate_rotation: narrow
      target_plate_rotation: narrow

  # replace the lid
  - name: Replace lid on exchange with lid in lid nest 3
    module: biopf400
    action: replace_lid
    args:
      source: lidnest_3_narrow
      target: exchange_deck_low_narrow
      source_approach: safe_path_lidnest_3
      target_approach: safe_path_exchange
      source_plate_rotation: narrow
      target_plate_rotation: narrow
      lid_height: 8

  - name: open incubator
    module: inheco_devID2_floor0
    action: open

  # transfer from exchange to tekmatic, seems fine
  - name: transfer
    module: biopf400
    action: transfer
    args:
      source: exchange_deck_low_narrow
      target: inheco_devID2_floor0_nest
      source_approach: safe_path_exchange
      target_approach: safe_path_inheco_dev2
      source_plate_rotation: narrow
      target_plate_rotation: narrow
    comment: Transfer plate with lid from bmg reader to tekmatic incubator

  - name: close incubator
    module: inheco_devID2_floor0
    action: close

  - name: close bmg
    module: bio_bmg
    action: close

  - name: run incubation
    module: inheco_devID2_floor0
    action: incubate
    args:
      temperature: 30.0
      shaker_frequency: 6.6
      wait_for_incubation_time: True
      incubation_time: 3600  # 3600 is one hour
    comment: incubate for one hour at 30 deg C, shaking at 6.6 Hz

  - name: open incubator
    module: inheco_devID2_floor0
    action: open
