name: Run the Tekmatic incubator - Substrate App Workflow

metadata:
  author: Casey Stone
  info: Workflow for incubating on tekmatic incubator
  version: 0.1

# TODO: TEST RECENT CHANGES

flowdef:
  - name: Replace lid on plate in bmg nest from lidnest 3 narrow 
    module: biopf400
    action: replace_lid
    args: 
      source: lidnest_3_narrow
      target: bmg_reader_nest
      source_approach: safe_path_lidnest_3
      target_approach: safe_path_bmg
      source_plate_rotation: narrow
      target_plate_rotation: narrow
      lid_height: 8

  - name: open incubator
    module: tekmatic
    action: open

  - name: transfer
    module: biopf400
    action: transfer
    args:
      source: bmg_reader_nest
      target: tekmatic_incubator_nest
      source_approach: safe_path_bmg
      source_plate_rotation: narrow
      target_plate_rotation: narrow
    comment: Transfer plate with lid from bmg reader to tekmatic incubator

  - name: close incubator
    module: tekmatic
    action: close

  - name: close bmg
    module: bio_bmg
    action: close

  - name: run incubation
    module: tekmatic
    action: incubate
    args: 
      temperature: 30.0
      shaker_frequency: 6.6    
      wait_for_incubation_time: True
      incubation_time: 1800   # 1800 sec is 30 min
    comment: incubate for 30 min at 30 deg C, shaking at 7 Hz
  
  - name: open incubator
    module: tekmatic
    action: open

# ends with tekmatic open and lid on plate