name: Remove substrate plate lid and move to BMG plate reader  - Substrate App Workflow

metadata:
  author: Casey Stone
  info: Workflow for transferring substrate plate from OT-2 to BMG plate reader
  version: 0.1

# TODO: TEST CHANGES!

flowdef:
  - name: Transfer plate without lid to exchange location
    module: biopf400
    action: transfer
    args: 
      source: ot2biobeta_deck1
      target: exchange_deck_high_wide
      target_approach: safe_path_exchange
      source_plate_rotation: wide
      target_plate_rotation: wide

    # SWAP the location of the lid, lid nest 1 wide to lid nest 3 narrow
  - name: Replace lid on plate at exchange location from lidnest 1
    module: biopf400
    action: replace_lid
    args: 
      source: lidnest_1_wide
      target: exchange_deck_low_wide
      source_approach: safe_path_lidnest_1
      target_approach: safe_path_exchange
      source_plate_rotation: wide
      target_plate_rotation: wide
      lid_height: 8

  - name: Remove lid and place at lid nest 3 (narrow)
    module: biopf400
    action: remove_lid
    args: 
      source: exchange_deck_low_narrow
      target: lidnest_3_narrow
      source_approach: safe_path_exchange 
      target_approach: safe_path_lidnest_3
      source_plate_rotation: narrow
      target_plate_rotation: narrow
      lid_height: 8

  - name: Open the BMG plate reader tray
    module: bio_bmg
    action: open

  - name: Transfer plate without lid to bmg nest
    module: biopf400
    action: transfer
    args: 
      source: exchange_deck_low_narrow
      target: bmg_reader_nest
      source_approach: safe_path_exchange
      target_approach: safe_path_bmg
      source_plate_rotation: narrow
      target_plate_rotation: narrow

  - name: Close the bmg door
    module: bio_bmg
    action: close

  - name: Run BMG Inoculation and reading assay
    module: bio_bmg
    action: run_assay
    args: 
      assay_name: NIDHI
      data_output_file_name: payload.bmg_data_output_name   

  - name: Open the BMG plate reader tray
    module: bio_bmg
    action: open

  # ends with bmg open and no lid on plate




  